PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'gender': '', 'age': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = white
  expName = FatFace
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Routines
  Routine Instruction
    TextComponent InstrText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment!

        In our experiment, two faces will presented on the Screen, one is on top and another one is at the bottome.
        Place indicate which face looks fatter by clicking on it as quick as you can.

        Press "Space" to go to the practical session.
    KeyboardComponent InstrKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine AsianF
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        AFcondition = random.choice(('conditionList/AF_list1.xlsx','conditionList/AF_list2.xlsx','conditionList/AF_list3.xlsx','conditionList/AF_list4.xlsx','conditionList/AF_list5.xlsx'))

        thisExp.addData('AFcondition_file', AFcondition)
      Begin Routine:
        AFMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent AF_image_1
      image [set every repeat] = $Upper_Image
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    ImageComponent AF_image_2
      image [set every repeat] = $Lower_Image
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    MouseComponent AFMouse
      clickable = AF_image_1,AF_image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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  Routine Blank500
    TextComponent BlankTest
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine AsianM
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        AMcondition = random.choice(('conditionList/AM_list1.xlsx','conditionList/AM_list2.xlsx','conditionList/AM_list3.xlsx','conditionList/AM_list4.xlsx','conditionList/AM_list5.xlsx'))

        thisExp.addData('AMcondition_file', AMcondition)
      Begin Routine:
        AMMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent AM_image_1
      image [set every repeat] = $Upper_Image
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    ImageComponent AM_imgae_2
      image [set every repeat] = $Lower_Image
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    MouseComponent AMMouse
      clickable = AM_image_1,AM_imgae_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
      stopVal [condition] = 3
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  Routine CaucasianF
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        CFcondition = random.choice(('conditionList/CF_list1.xlsx','conditionList/CF_list2.xlsx','conditionList/CF_list3.xlsx','conditionList/CF_list4.xlsx','conditionList/CF_list5.xlsx'))

        thisExp.addData('CFcondition_file', CFcondition)
      Begin Routine:
        CFMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation3
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent CF_image_1
      image [set every repeat] = $Upper_Image
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    ImageComponent CF_image_2
      image [set every repeat] = $Lower_Image
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    MouseComponent CFMouse
      clickable = CF_image_1,CF_image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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  Routine CaucasianM
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        CMcondition = random.choice(('conditionList/CM_list1.xlsx','conditionList/CM_list2.xlsx','conditionList/CM_list3.xlsx','conditionList/CM_list4.xlsx','conditionList/CM_list5.xlsx'))

        thisExp.addData('CMcondition_file', CMcondition)
      Begin Routine:
        CMMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation4
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent CM_image_1
      image [set every repeat] = $Upper_Image
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    ImageComponent CM_image_2
      image [set every repeat] = $Lower_Image
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    MouseComponent CMMouse
      clickable = CM_image_1,CM_image_2
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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  Routine End
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Thank you!
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  Routine Practise
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        PracMouse.setPos(newPos=(0,0))
    PolygonComponent Fixation0
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent Upper_image
      image [set every repeat] = $UImage
      interpolate = nearest
      pos = (0, 0.16)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    ImageComponent Lower_image
      image [set every repeat] = $LImage
      interpolate = nearest
      pos = (0, -0.16)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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    MouseComponent PracMouse
      clickable = Upper_image,Lower_image
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      saveParamsClickable = name,pos
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3
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  Routine Break
    TextComponent BreakText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The practise part is over.

        Press "Space" to go to the next part.
    KeyboardComponent Prac_Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instruction
  LoopInitiator Prac_Loop loopType="TrialHandler"
    conditionsFile = Prac_Order.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Uimage', 'materials/Asian/Female/S_A_F_01_250.png'), ('Limage', 'materials/Asian/Female/S_A_F_01_250.png')]),
      OrderedDict([('Uimage', 'materials/Asian/Male/L_A_M_02_270.png'), ('Limage', 'materials/Asian/Male/S_A_M_02_250.png')]),
      OrderedDict([('Uimage', 'materials/Caucasian/Female/S_C_F_05_250.png'), ('Limage', 'materials/Caucasian/Female/L_C_F_05_270.png')]),
      OrderedDict([('Uimage', 'materials/Caucasian/Male/S_C_M_07_250.png'), ('Limage', 'materials/Caucasian/Male/S_C_M_07_250.png')])]
    Routine Practise
    Routine Blank500
  LoopTerminator Prac_Loop
  Routine Break
  LoopInitiator BlockTrail loopType="TrialHandler"
    conditionsFile = BlockOrder.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('AF_rep', 1), ('AM_rep', 0), ('CF_rep', 0), ('CM_rep', 0)]),
      OrderedDict([('AF_rep', 0), ('AM_rep', 1), ('CF_rep', 0), ('CM_rep', 0)]),
      OrderedDict([('AF_rep', 0), ('AM_rep', 0), ('CF_rep', 1), ('CM_rep', 0)]),
      OrderedDict([('AF_rep', 0), ('AM_rep', 0), ('CF_rep', 0), ('CM_rep', 1)])]
    LoopInitiator AF_Loop loopType="TrialHandler"
      conditionsFile = $AFcondition
      loopType = random
      nReps = AF_rep
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      Routine AsianF
      Routine Blank500
    LoopTerminator AF_Loop
    LoopInitiator AM_Loop loopType="TrialHandler"
      conditionsFile = $AMcondition
      loopType = random
      nReps = AM_rep
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      Routine AsianM
      Routine Blank500
    LoopTerminator AM_Loop
    LoopInitiator CF_Loop loopType="TrialHandler"
      conditionsFile = $CFcondition
      loopType = random
      nReps = CF_rep
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      Routine CaucasianF
      Routine Blank500
    LoopTerminator CF_Loop
    LoopInitiator CM_Loop loopType="TrialHandler"
      conditionsFile = $CMcondition
      loopType = random
      nReps = CM_rep
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      Routine CaucasianM
      Routine Blank500
    LoopTerminator CM_Loop
  LoopTerminator BlockTrail
  Routine End
